PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'id': '', 'gender (M/F/N)': '', 'age': '', 'session': '001', 'group': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = experiment_eo_ec_controller_annotations
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Routines
  Routine trial
    ImageComponent joystick_target
      image = res\circle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
      units = norm
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    SoundComponent song_one
      sound = res\Daft Punk - Within (Official Audio).ogg
      startVal [time (s)] = 0
      stopVal [duration (s)] = 45
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    ImageComponent valence_arousal_space
      image = res\valece_arousal_space.png
      opacity = 0.5
      size = (1.2, 1.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 45
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
      timeRelativeTo = routine
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    SoundComponent open_eyes
      sound = A
      startVal [time (s)] = 45
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_one_rating
      Data Format = rows
      Item Padding = 0.1
      Items = res\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1.5, 0.7)
      startVal [time (s)] = 45
      stopVal [duration (s)] = 15
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    SoundComponent white_noise_rating
      sound = res\1 min wn.wav
      startVal [time (s)] = 60
      stopVal [duration (s)] = 15
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    TextComponent instruction_ec
      letterHeight = 0.1
      startVal [time (s)] = 60
      stopVal [duration (s)] = 15
      text = Now CLOSE your eyes and get ready for the next song.
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    SoundComponent song_two
      sound = res\Metallica-Fade To Black www.my-free-mp3.net  (1).ogg
      startVal [time (s)] = 75
      stopVal [duration (s)] = 45
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    ImageComponent valence_arousal_space_two
      image = res\valece_arousal_space.png
      size = (1, 1)
      startVal [time (s)] = 75
      stopVal [duration (s)] = 45
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    SoundComponent eyes_open
      sound = A
      startVal [time (s)] = 120
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_two_rating
      Data Format = rows
      Item Padding = 0.05
      Items = res\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1.5, 0.7)
      startVal [time (s)] = 120
      stopVal [duration (s)] = 15
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    SoundComponent white_noise_rating_two
      sound = res\1 min wn.wav
      startVal [time (s)] = 135
      stopVal [duration (s)] = 15
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    TextComponent instruction_eo
      letterHeight = 0.1
      startVal [time (s)] = 135
      stopVal [duration (s)] = 15
      text = Now OPEN your eyes and get ready for the next song.
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  Routine opening
    SoundComponent white_noise
      sound = res\1 min wn.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome to the Emotion Music experiment
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    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
      text = The sound you are hearing is called White Noise, it serves to reset your emotions to a neutral condition.
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    TextComponent eo_instructions
      letterHeight = 0.1
      startVal [time (s)] = 11
      stopVal [duration (s)] = 4
      text = Now keep your eyes OPEN, the experiment is about to start
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    SoundComponent eyes_open_test
      sound = A
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    TextComponent beep_instructions
      letterHeight = 0.1
      startVal [time (s)] = 7
      stopVal [duration (s)] = 4
      text = When you hear this BEEP it means it's time to OPEN your eyes.
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Flow
  Routine opening
  LoopInitiator music_emotion_trial_eo_ec loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator music_emotion_trial_eo_ec
