PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'id': '', 'gender (M/F/N)': '', 'age': '', 'hand(R/L)': '', 'session': '001', 'group': '01'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [900, 900]
  expName = experiment_eo_ec
  logging level = data
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Routines
  Routine enter_rest_state
    TextComponent resting_state_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Before the we begin, we need to record your "resting" state with both eyes OPEN and eyes CLOSED for 2 minutes each.

        Think of it as short meditation session, relax your brain and focus on your breathing.
    TextComponent rest_state_eyes_open
      letterHeight = 0.1
      startVal [time (s)] = 20
      stopVal [duration (s)] = 5
      text = We start we eyes OPEN, get ready!
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    ImageComponent rest_state_eyes_open_icon
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 120
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    TextComponent rest_eyes_closed
      letterHeight = 0.05
      startVal [time (s)] = 145
      stopVal [duration (s)] = 15
      text = Now eyes CLOSED, a sound will tell you when it's over.
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    ImageComponent rest_eyes_closed_icon
      image = res\img\eye_closed.png
      size = (0.5, 0.5)
      startVal [time (s)] = 160
      stopVal [duration (s)] = 120
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 279
      stopVal [duration (s)] = 1.0
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  Routine intro
    TextComponent welcome_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Welcome to the Emotion Music experiment.

        This is the recorded experimental session.
    TextComponent welcome_instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 40
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      text:
        The experiment is based on timed routines, it is important that you follow the instructions and answer the song ratings in the given time (15 seconds).

        Your main task is to listen to the proposed music playlist and annotate your emotions continuously by moving the red reticle on the Valence-Arousal space.

        The total length of the experiment is about 20-25 minutes, with the possibility of a short break in the middle.
    ButtonComponent start_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 55
      text = Start Experiment
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  Routine white_noise
    SoundComponent intro_white_noise
      sound = res\1 min wn.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent first_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 25
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      text:
        The experiment is about to begin. Before each song we will use White Noise to "wash" away your emotions.

        Please follow carefully the instructions and make sure your eyes stay OPEN or CLOSED accordingly until the end of the song.

        The first trial will begin with your eyes OPEN.
    ImageComponent first_eyes_instruction
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 5
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  Routine white_noise_break
    SoundComponent after_break_white_noise
      sound = res\1 min wn.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent after_break_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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      text:
        We are about to resume the experiment.

        The next trial will begin with your eyes OPEN.
    ImageComponent first_eyes_instruction_2
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 5
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  Routine trials_first_part
    ImageComponent valence_arousal_space
      image = res\img\valence_arousal_space_basic.png
      opacity = 0.5
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    ImageComponent reticle
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent song_one
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent open_eyes
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_one_rating
      Data Format = rows
      Item Padding = 0.1
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 60
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_one
      sound = res\1 min wn.wav
      startVal [time (s)] = 80
      stopVal [duration (s)] = 15
      volume = 0.7
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    TextComponent instruction_ec
      letterHeight = 0.05
      startVal [time (s)] = 80
      stopVal [duration (s)] = 10
      text = Now CLOSE your eyes and get ready for the next song.
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    ImageComponent eyes_closed
      image = res\img\eye_closed.png
      size = (1, 1)
      startVal [time (s)] = 90
      stopVal [duration (s)] = 5
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    ImageComponent valence_arousal_space_2
      image = res\img\valence_arousal_space_basic.png
      size = (0.5, 0.5)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    SoundComponent song_two
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    ImageComponent reticle_2
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    SoundComponent open_eyes_two
      sound = A
      startVal [time (s)] = 154
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_two_rating
      Data Format = rows
      Item Padding = 0.05
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 155
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_two
      sound = res\1 min wn.wav
      startVal [time (s)] = 175
      stopVal [duration (s)] = 15
      volume = 0.7
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    TextComponent instruction_eo
      letterHeight = 0.05
      startVal [time (s)] = 175
      stopVal [duration (s)] = 10
      text = Now OPEN your eyes and get ready for the next song.
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    ImageComponent eyes_open_2
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 185
      stopVal [duration (s)] = 5
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  Routine trials_second_part
    ImageComponent valence_arousal_space_3
      image = res\img\valence_arousal_space_basic.png
      opacity = 0.5
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    ImageComponent reticle_3
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent song_one_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    MouseComponent mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent open_eyes_2
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_one_rating_2
      Data Format = rows
      Item Padding = 0.1
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 60
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_one_2
      sound = res\1 min wn.wav
      startVal [time (s)] = 80
      stopVal [duration (s)] = 15
      volume = 0.7
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    TextComponent instruction_ec_2
      letterHeight = 0.05
      startVal [time (s)] = 80
      stopVal [duration (s)] = 10
      text = Now CLOSE your eyes and get ready for the next song.
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    ImageComponent eyes_closed_2
      image = res\img\eye_closed.png
      size = (1, 1)
      startVal [time (s)] = 90
      stopVal [duration (s)] = 5
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    ImageComponent valence_arousal_space_4
      image = res\img\valence_arousal_space_basic.png
      size = (0.5, 0.5)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    SoundComponent song_two_2
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    ImageComponent reticle_4
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    MouseComponent mouse_4
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    SoundComponent open_eyes_two_2
      sound = A
      startVal [time (s)] = 154
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_two_rating_2
      Data Format = rows
      Item Padding = 0.05
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 155
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_two_2
      sound = res\1 min wn.wav
      startVal [time (s)] = 175
      stopVal [duration (s)] = 15
      volume = 0.7
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    TextComponent instruction_eo_2
      letterHeight = 0.05
      startVal [time (s)] = 175
      stopVal [duration (s)] = 10
      text = Now OPEN your eyes and get ready for the next song.
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    ImageComponent eyes_open
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 185
      stopVal [duration (s)] = 5
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  Routine mid_break
    TextComponent break_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        You are on a break.

        Feel free to look around and relax your eyes.

        Please do NOT remove your headset.

        When you are ready to continue, click the button.
    ButtonComponent resume_experiment
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 15
      text = Resume Experiment
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  Routine exit_rest_state
    TextComponent resting_state_instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Congratulations, you made it!
        Before you leave, we need to record your "resting" state with both eyes OPEN and eyes CLOSED for 2 minutes each.

        Think of it as short meditation session, relax your brain and focus on your breathing.
    TextComponent rest_state_eyes_open_2
      letterHeight = 0.1
      startVal [time (s)] = 20
      stopVal [duration (s)] = 5
      text = We start we eyes OPEN, get ready!
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    ImageComponent rest_state_eyes_open_icon_2
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 120
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    TextComponent rest_eyes_closed_2
      letterHeight = 0.05
      startVal [time (s)] = 145
      stopVal [duration (s)] = 15
      text = Now eyes CLOSED, a sound will tell you when it's over.
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    ImageComponent rest_eyes_closed_icon_2
      image = res\img\eye_closed.png
      size = (0.5, 0.5)
      startVal [time (s)] = 160
      stopVal [duration (s)] = 120
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    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 279
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 280
      stopVal [duration (s)] = 10
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      text:
        And this is the END!

        Thanks again for participating, please do NOT touch or close anything, the researcher will come to help you remove the headset. This window will close automatically...
Flow
  Routine intro
  Routine enter_rest_state
  Routine white_noise
  LoopInitiator phase_1 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trials_first_part
  LoopTerminator phase_1
  Routine mid_break
  Routine white_noise_break
  LoopInitiator phase_2 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trials_second_part
  LoopTerminator phase_2
  Routine exit_rest_state
