PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'id': '', 'gender (M/F/N)': '', 'age': '', 'session': '001', 'group': '01'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [900, 900]
  expName = Joystick Demo
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Routines
  Routine introduction
    ImageComponent va_3
      image = res\img\valence_arousal_space.png
      size = (1, 1)
      startVal [time (s)] = 0
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    ImageComponent reticle
      image = res\img\reticle.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      units = norm
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 0
      timeRelativeTo = routine
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    KeyboardComponent key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine introduction
