PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'id': '', 'gender (M/F/N)': '', 'age': '', 'session': '001', 'group': '01'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [900, 900]
  expName = Mouse Demo
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Routines
  Routine introduction
    ImageComponent va_3
      image = res\img\valence_arousal_space.png
      size = (1, 1)
      startVal [time (s)] = 0
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    ImageComponent reticle
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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Flow
  Routine introduction
