PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'id': '', 'gender (M/F/N)': '', 'age': '', 'session': '001', 'group': '01'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [900, 900]
  expName = experiment_eo_ec_controller_annotations
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Routines
  Routine introduction
    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Welcome to the Emotion Music experiment
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    TextComponent task_introduction
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 10
      text = In this experiment your task is to listen to a playlist of song excerpts and rate your emotions in real time.
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    ImageComponent va_1
      image = res\img\russel_va.png
      size = (1, 1)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 15
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    TextComponent va_exp_1
      letterHeight = 0.05
      startVal [time (s)] = 14.00
      stopVal [duration (s)] = 6
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      text:
        The quadrant that will be shortly displayed is called Valence-Arousal space.
        It's an emotion assessment tool developed by James Russel.
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 35
      stopVal [duration (s)] = 15
      text = The goal of the Valence-Arousal space is to represent emotions over two dimensions: the valence of an emotion is represented from left (negative) to right (positive). The arousal of an emotions is represented from bottom (low) to top (high). The center represents neutral emotions.
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    ImageComponent va_2
      image = res\img\valence_arousal_space.png
      size = (1, 1)
      startVal [time (s)] = 55
      stopVal [duration (s)] = 10
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    TextComponent va_exp_2
      letterHeight = 0.05
      startVal [time (s)] = 50
      stopVal [duration (s)] = 5
      text = Here is a simplified version that we are going to use in this experiment.
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    TextComponent va_exp_3
      letterHeight = 0.05
      startVal [time (s)] = 65
      stopVal [duration (s)] = 10
      text = Now you are in control. Try to move the red reticle using the LEFT thumbstick of your joystick. The software will record the position automatically.
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    ImageComponent reticle_introduction
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 75
      units = norm
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    ImageComponent va_3
      image = res\img\valence_arousal_space.png
      size = (1, 1)
      startVal [time (s)] = 75
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    JoystickComponent joystick_introduction
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 75
      timeRelativeTo = routine
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Flow
  Routine introduction
