PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 900]
  expName = training_joystick_ca_trial
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Routines
  Routine example_trial_joystick
    TextComponent instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Now that you know how to move your reticle, let's try to simulate a trial.
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    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text = Before each trial, you will hear this noise. It's called White Noise and the purpose is to "wash" away your current emotional state.
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    TextComponent instructions_3
      letterHeight = 0.05
      startVal [time (s)] = 20
      stopVal [duration (s)] = 10
      text = Before listening to each song, an instruction will tell you if you need to keep your eyes OPEN or CLOSED. Let's try both!
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    ImageComponent eyes_open
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 10
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    TextComponent instructions_4
      letterHeight = 0.05
      startVal [time (s)] = 40
      stopVal [duration (s)] = 10
      text = When you see the icon, CLOSE your eyes and open them when you hear this sound.
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    SoundComponent alarm_eyes_open_1
      sound = A
      startVal [time (s)] = 45
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    ImageComponent eyes_closed
      image = res\img\eye_closed.png
      size = (0.5, 0.5)
      startVal [time (s)] = 50
      stopVal [duration (s)] = 10
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    SoundComponent eyes_open_alarm_2
      sound = A
      startVal [time (s)] = 60
      stopVal [duration (s)] = 1.0
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    TextComponent instructions_5
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 10
      text = When you are listening to music with eyes OPEN or CLOSED, you are supposed to continuously annotate your emotions by moving the cursor.
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    TextComponent instructions_6
      letterHeight = 0.05
      startVal [time (s)] = 70
      stopVal [duration (s)] = 10
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      text:
        To annotate your emotions, simply move the cursor in the corresponding area of the Valence-Arousal space. Get ready, it's your turn now :)

        Colors have been removed to avoid distractions.
    ImageComponent eyes_open_2
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 80
      stopVal [duration (s)] = 5
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    SoundComponent white_noise
      sound = res\1 min wn.wav
      startVal [time (s)] = 10
      stopVal [duration (s)] = 60
      volume = 0.5
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    SoundComponent white_noise_2
      sound = res\1 min wn.wav
      startVal [time (s)] = 70
      stopVal [duration (s)] = 15
      syncScreenRefresh = False
      volume = 0.5
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    SoundComponent song_trial
      sound = res\playlist\Daft Punk - Within (Official Audio).ogg
      startVal [time (s)] = 85
      stopVal [duration (s)] = 45
      syncScreenRefresh = False
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    ImageComponent valence_arousal_space
      image = res\img\valence_arousal_space_basic.png
      size = (1, 1)
      startVal [time (s)] = 85
      stopVal [duration (s)] = 45
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 85
      stopVal [duration (s)] = 45
      timeRelativeTo = joystick onset
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    ImageComponent reticle
      image = res\img\reticle.png
      size = (0.15, 0.15)
      startVal [time (s)] = 85
      stopVal [duration (s)] = 45
      units = norm
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    TextComponent instructions_7
      letterHeight = 0.05
      startVal [time (s)] = 130
      stopVal [duration (s)] = 10
      text = After each song you have 15 seconds to rate how much you liked/disliked it and how familiar it was to you. Use your mouse to select a value on the scale.
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    FormComponent song_rating
      Data Format = rows
      Item Padding = 0.05
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 140
      stopVal [duration (s)] = 30
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    SoundComponent white_noise_3
      sound = res\1 min wn.wav
      startVal [time (s)] = 170
      stopVal [duration (s)] = 15
      syncScreenRefresh = False
      volume = 0.5
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    ImageComponent eyes_closed_2
      image = res\img\eye_closed.png
      size = (0.5, 0.5)
      startVal [time (s)] = 180
      stopVal [duration (s)] = 5
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    TextComponent instructions_8
      letterHeight = 0.05
      startVal [time (s)] = 170
      stopVal [duration (s)] = 10
      text = Let's give it one more try, with eyes CLOSED this time.
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    SoundComponent song_trial_2
      sound = res\playlist\Metallica-Fade To Black www.my-free-mp3.net  (1).ogg
      startVal [time (s)] = 185
      stopVal [duration (s)] = 45
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    ImageComponent va_2
      image = res\img\valence_arousal_space_basic.png
      size = (1, 1)
      startVal [time (s)] = 185
      stopVal [duration (s)] = 45
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    JoystickComponent joystick_2
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 185
      stopVal [duration (s)] = 45
      timeRelativeTo = joystick onset
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    ImageComponent reticle_2
      image = res\img\reticle.png
      size = (0.15, 0.15)
      startVal [time (s)] = 185
      stopVal [duration (s)] = 45
      units = norm
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    SoundComponent eyes_open_alarm
      sound = A
      startVal [time (s)] = 230
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_rating_2
      Data Format = rows
      Item Padding = 0.05
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 230
      stopVal [duration (s)] = 30
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    TextComponent instructions_9
      letterHeight = 0.03
      startVal [time (s)] = 260
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      text:
        In every trial, you will be instructed to listen to one song with eyes OPEN (and annotate your emotions) and one song with eyes CLOSED.  After each song you will give your rating, receive new instructions and listen to White Noise to reset your emotional state before the next one.
        When you are ready to start the real experiment, press Q.
        For any doubts, ask the researcher, he is a cool dude. Have fun :)
    KeyboardComponent key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 260
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Flow
  Routine example_trial_joystick
