PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 900]
  expName = training_mouse_ca_emotional_mix
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Routines
  Routine trial
    TextComponent welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Welcome to the annotation training
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    TextComponent description
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text = The purpose of this training is to get you acquainted with the annotation task.
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 20
      stopVal [duration (s)] = 25
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      text:
        For the next 3 minutes, you will hear a mix of different songs with no breaks in between.
        Your task is:
        - Move the reticle along the Valence-Arousal space in the area corresponding to the emotion you are feeling
        - Adjust the reticle position if the arousal intensity or the emotional valence changes over time
        - Return to the Neutral Zone when a new song starts
    TextComponent warning
      letterHeight = 0.05
      startVal [time (s)] = 45
      stopVal [duration (s)] = 25
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      text:
        Be careful to the following:
        - You need to annotate the emotion you are feeling, not the emotion you think the artist wants to communicate (sometimes they are the same emotion, sometimes they are not)
        - You don't need to click anywhere, the position of the reticle is saved every second in background
        - You should stay on the Valence-Arousal space and avoid the grey area, annotations there are not saved.
    TextComponent raedy
      letterHeight = 0.05
      startVal [time (s)] = 70
      stopVal [duration (s)] = 5
      text = Alright, get ready! :)
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    ImageComponent valence_arousal_space
      image = res\img\valence_arousal_space.png
      size = (1, 1)
      startVal [time (s)] = 80
      stopVal [duration (s)] = 180
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    SoundComponent song_mix
      sound = res\playlist\emotional_mashup.ogg
      startVal [time (s)] = 80
      stopVal [duration (s)] = 180
      syncScreenRefresh = False
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    ImageComponent reticle
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 80
      stopVal [duration (s)] = 180
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    MouseComponent mouse
      durationEstim = 180
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 80
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    TextComponent done
      letterHeight = 0.1
      startVal [time (s)] = 260
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      text:
        Bravo!

        Press Q to save and exit :)
    KeyboardComponent key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 260
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Flow
  Routine trial
