PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 900]
  expName = training_joystick_ca_trial
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Routines
  Routine example_trial_joystick
    TextComponent instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Now that you know how to move your mouse, let's try to simulate a trial.
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    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text = Before each trial, you will hear this noise. It's called White Noise and the purpose is to "wash" away your current emotional state.
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    TextComponent instructions_3
      letterHeight = 0.05
      startVal [time (s)] = 20
      stopVal [duration (s)] = 10
      text = In addition, 5 seconds before the beginning of the next song, you will be instructed to OPEN or CLOSE your eyes during the listening.
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    ImageComponent eyes_open
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 10
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    TextComponent instructions_4
      letterHeight = 0.05
      startVal [time (s)] = 40
      stopVal [duration (s)] = 10
      text = When you hear this sound, you need to OPEN your eyes.
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    SoundComponent alarm_eyes_open_1
      sound = A
      startVal [time (s)] = 45
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    ImageComponent eyes_closed
      image = res\img\eye_closed.png
      size = (0.5, 0.5)
      startVal [time (s)] = 50
      stopVal [duration (s)] = 10
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    SoundComponent eyes_open_alarm_2
      sound = A
      startVal [time (s)] = 60
      stopVal [duration (s)] = 1.0
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    TextComponent instructions_5
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 10
      text = In case of eyes OPEN, you will be required to annotate your emotions on the Valence Arousal space.
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    TextComponent instructions_6
      letterHeight = 0.05
      startVal [time (s)] = 70
      stopVal [duration (s)] = 10
      text = Now get ready with your eyes OPEN, in the next 15 seconds a simulation trial with music and annotations will begin
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    ImageComponent eyes_open_2
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 80
      stopVal [duration (s)] = 5
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    SoundComponent white_noise
      sound = res\1 min wn.wav
      startVal [time (s)] = 10
      stopVal [duration (s)] = 60
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    SoundComponent white_noise_2
      sound = res\1 min wn.wav
      startVal [time (s)] = 70
      stopVal [duration (s)] = 15
      syncScreenRefresh = False
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    SoundComponent song_trial
      sound = res\playlist\Daft Punk - Within (Official Audio).ogg
      startVal [time (s)] = 85
      stopVal [duration (s)] = 45
      syncScreenRefresh = False
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    ImageComponent valence_arousal_space
      image = res\img\valence_arousal_space.png
      size = (1, 1)
      startVal [time (s)] = 85
      stopVal [duration (s)] = 45
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 85
      stopVal [duration (s)] = 45
      timeRelativeTo = joystick onset
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    ImageComponent reticle
      image = res\img\reticle.png
      size = (0.15, 0.15)
      startVal [time (s)] = 85
      stopVal [duration (s)] = 45
      units = norm
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    TextComponent instructions_7
      letterHeight = 0.05
      startVal [time (s)] = 130
      stopVal [duration (s)] = 10
      text = After each song you have 15 seconds to rate how much you liked/disliked it and how familiar it was to you. Use your mouse to select a value
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    FormComponent song_rating
      Data Format = rows
      Item Padding = 0.05
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 140
      stopVal [duration (s)] = 15
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    TextComponent instructions_8
      letterHeight = 0.05
      startVal [time (s)] = 155
      text = And then before the next song starts you will receive new instructions to OPEN/CLOSE your eyes and listen to 15 seconds of White Noise. When you are ready to start the real experiment, press ESC. For any doubts, ask the researcher, he is a cool dude. Have fun :)
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    SoundComponent white_noise_3
      sound = res\1 min wn.wav
      startVal [time (s)] = 155
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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Flow
  Routine example_trial_joystick
